<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindDynamicForagingTaskLogic.json</TaskLogicPath>
        <RigPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindDynamicForagingRig.json</RigPath>
        <SessionPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialOutcome">
              <rx:Name>GlobalTrialOutcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
              <rx:Name>GlobalTrial</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name />
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationControl.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TaskEngine.bonsai" />
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>EndOnNull</scr:Name>
        <scr:Expression>it == null</scr:Expression>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>